PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 3
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent WelcomeText
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Welcome to the Study!

        The study consists of alternating blocks of figer tapping and rest.

        Please, focus your sight in the center of the screen during the whole duration of the session (tapping and rest).

        During the session you will hear a series of auditory cues.

        When the word "TAP" appears on the screen, your job is to tap  the SECOND BUTTON with your index finger as quickly and accurately as possible each time you hear the cue. Please keep all the rest of your fingers on their corresponding buttons during the whole duration of the tapping block.

        When the word "REST" appears on the screen, you will see it and hear a different sound. During the "REST" block stop pressing and relax your fingers.You will still hear the auditory cue, but you shoud not press any buttons.

        At the end of rest period the sound will stop, you will see a countdown before you hear first auditory cue of the next tapping period.

        If you are ready - tap ANY BUTTON
    KeyboardComponent WelcomeStart
      allowedKeys = '6', '7', '8', '9', '0', 'num_6', 'num_7', 'num_8', 'num_9', 'num_0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_screen
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    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you
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  Routine Cross
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    TextComponent cross_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = +
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine Auditory_cue_0_5Hz
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    KeyboardComponent resp_0_5Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_0_5HZ
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 15:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_0_5HZ.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 2  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 15 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound0_5HZ_play_times", sound_times)
  Routine Auditory_cue_0_8HZ
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    KeyboardComponent resp_0_8HZs
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_0_8HZ
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 20:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_0_8HZ.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1.5  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 20 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound0_8HZ_play_times", sound_times)
  Routine Auditory_cue_1Hz
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    SoundComponent beep_sound_1Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 30:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_1Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 30 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound1Hz_play_times", sound_times)
    TextComponent Cross1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    KeyboardComponent resp_1Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Auditory_cue_2Hz
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    SoundComponent beep_sound_2Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 60:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_2Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.5  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound2Hz_play_times", sound_times)
    TextComponent Cross1_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    KeyboardComponent resp_2Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Auditory_cue_3Hz
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    SoundComponent beep_sound_3Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 90:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_3Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.333  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound3Hz_play_times", sound_times)
    TextComponent Cross1_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    KeyboardComponent resp_3Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Auditory_cue_4Hz
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    SoundComponent beep_sound_4Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 120:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_4Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.25  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound4Hz_play_times", sound_times)
    TextComponent Cross1_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    KeyboardComponent resp_4Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Auditory_cue_5Hz
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  Routine Auditory_cue_6Hz
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  Routine Auditory_cue_7Hz
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    KeyboardComponent resp_7Hz
      allowedKeys = '7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_7Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 210:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_7Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1429  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound7Hz_play_times", sound_times)
    TextComponent Cross1_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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  Routine Auditory_cue_8Hz
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    KeyboardComponent resp_8Hz
      allowedKeys = '7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_8Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 240:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_8Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.125  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound8Hz_play_times", sound_times)
    TextComponent Cross1_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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  Routine MRI_Settings
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    CodeComponent settings
      Code Type = Py
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      Begin Experiment:
        # KUL/UZL Clinical fMRI paradigms
        # @ Stefan Sunaert - stefan.sunaert@kuleuven.be
        # @ Maud Beeckmans - maud.beeckmans@kuleuven.be
        # v1.2 - March 2024


        # Here we define the keys that the keyboard or response box will generate
        button1 = ('num_1','1','&')
        button2 = ('num_2','2','é')
        button3 = ('num_3','3','"')
        button4 = ('num_4','4','6')

        # What is/are the key(s) generated by the trigger box of the scanner?
        mripulse = ('num_5','5','(')
        pulses_before_start = 2

        # Should the image be flipped on the screen?
        # Possible: None, horiz (flips L-R), vert (flips U-D)
        #flip = 'horiz'
        flip = 'none'
        #flip = 'vert'
    CodeComponent code_init
      Code Type = Py
      Begin Experiment:
        # Show some extra information if 1
        debug = 1

        # make a function for the allowed buttons
        def allowedButtons(tup):
            str = ''
            for item in tup:
                str = '\'' + item + '\'' + ',' + str
            str = str[:-1]
            return str

        # make a function for the tup 2 str
        def tup2str(tup):
            s = ',' # s is assigned the comma, this will be used as the separator
            str = '' # str is initialized as an empty string
            str = s.join(tup) # = string method that conactenates the elements of 'tup' using 's' (which is a comma) as the separator
            return str

        # some defaults
        time_pos = (0.8, -0.46)
        time_opa = 0.3
        time_size = 0.015
  Routine Audotiry_cue_6_5Hz
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    KeyboardComponent resp_6_5Hz
      allowedKeys = '7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_6_5Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 195:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_6_5Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1538  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound6_5Hz_play_times", sound_times)
    TextComponent Cross1_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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  Routine Auditory_cue_7_5Hz
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    KeyboardComponent resp_7_5Hz
      allowedKeys = '7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_7_5Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 225:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_7_5Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1334  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound7_5Hz_play_times", sound_times)
    TextComponent Cross1_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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  Routine Rest_countdown
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine C
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    SoundComponent beep_sound_rest
      sound = C
      speakerIndex = 8.0
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = REST
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  Routine REST1
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    SoundComponent beep_sound_12Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 30:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_12Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 30 repetitions
            continueRoutine = False
    TextComponent Cross1_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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  Routine REST2
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    SoundComponent beep_sound_22Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 60:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_22Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.5  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
    TextComponent Cross1_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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  Routine REST3
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    SoundComponent beep_sound_32Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 90:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_32Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.333  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
    TextComponent Cross1_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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  Routine REST4
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    SoundComponent beep_sound_42Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 120:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_42Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.25  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
    TextComponent Cross1_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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  Routine REST5
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    TextComponent Cross1_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    SoundComponent beep_sound_52Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 150:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_52Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine REST6
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    TextComponent Cross1_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    SoundComponent beep_sound_62Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 180:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_62Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1667  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine REST65
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    TextComponent Cross1_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_6_52Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 195:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_6_52Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1538  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine REST7
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    TextComponent Cross1_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_72Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 210:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_72Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1429  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine REST75
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    TextComponent Cross1_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_7_52Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 225:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_7_52Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1334  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine REST8
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    TextComponent Cross1_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_82Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 240:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_82Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.125  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine Auditory_cue_2_5_Hz
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    KeyboardComponent resp_2_5Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2_5Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2_5Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2_5Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2_5Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 75:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_2_5_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.4  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound2_5Hz_play_times", sound_times)
    SoundComponent beep_sound_2_5_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine REST25
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    TextComponent Cross1_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 75:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_2_52_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.4  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
    SoundComponent beep_sound_2_52_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine Auditory_cue_3_5_Hz
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 105:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_3_5_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2857  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound3_5Hz_play_times", sound_times)
    SoundComponent beep_sound_3_5_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    KeyboardComponent resp_3_5Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3_5Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3_5Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3_5Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3_5Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine REST35
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    TextComponent Cross1_22
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    SoundComponent beep_sound_3_52_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 105:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_3_52_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2857  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine Auditory_cue_4_5_Hz
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    KeyboardComponent resp_4_5Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4_5Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4_5Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4_5Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4_5Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_4_5_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 135:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_4_5_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2222  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound4_5Hz_play_times", sound_times)
  Routine REST45
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    TextComponent Cross1_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    SoundComponent beep_sound_4_52_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 135:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_4_52_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2222  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
  Routine Auditory_cue_5_5_Hz
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    KeyboardComponent resp_5_5Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_5_5Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_5_5Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_5_5Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_5_5Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_5_5_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 165:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_5_5_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1818  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound5_5Hz_play_times", sound_times)
  Routine REST55
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    TextComponent Cross1_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = REST
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    SoundComponent beep_sound_5_52_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 165:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_5_52_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.1818  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
Flow
  Routine MRI_Settings
  Routine Welcome
  Routine Rest_countdown
  Routine Auditory_cue_1Hz
  Routine C
  Routine REST1
  Routine Rest_countdown
  Routine Auditory_cue_2Hz
  Routine C
  Routine REST2
  Routine Rest_countdown
  Routine Auditory_cue_2_5_Hz
  Routine C
  Routine REST25
  Routine Rest_countdown
  Routine Auditory_cue_3Hz
  Routine C
  Routine REST3
  Routine Rest_countdown
  Routine Auditory_cue_3_5_Hz
  Routine C
  Routine REST35
  Routine Rest_countdown
  Routine Auditory_cue_4Hz
  Routine C
  Routine REST4
  Routine Rest_countdown
  Routine Auditory_cue_4_5_Hz
  Routine C
  Routine REST45
  Routine Rest_countdown
  Routine Auditory_cue_5Hz
  Routine C
  Routine REST5
  Routine Rest_countdown
  Routine Auditory_cue_5_5_Hz
  Routine C
  Routine REST55
  Routine Rest_countdown
  Routine Auditory_cue_6Hz
  Routine C
  Routine REST6
  Routine Rest_countdown
  Routine End_screen
