PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Force stereo = False
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = complex finger tapping
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.7
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      text:
        Welcome to the Study!

        The study consists of alternating blocks of sequential index-middle figer tapping and rest.

        When the word "TAP" appears on the screen, please tap your fingers in sequence Index → Middle → Index → Middle..... as quickly and accurately as possible.

        You will have 30 seconds to complete each tapping block.

         During the whole duration of the task focus on the cross in the center of the screen.

        If you are ready to begin, tap ANY BUTTON.
    KeyboardComponent WelcomeStart
      allowedKeys = '6', '7', '8', '9', '0', 'num_6', 'num_7', 'num_8', 'num_9', 'num_0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_screen
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    TextComponent EndText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Thank you
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  Routine Rest_30
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    TextComponent Rest30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 25
      text = REST
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 25
      stopVal [duration (s)] = 1
      text = 5
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 1
      text = 4
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 27
      stopVal [duration (s)] = 1
      text = 3
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 28
      stopVal [duration (s)] = 1
      text = 2
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 29
      stopVal [duration (s)] = 1
      text = 1
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    SoundComponent beep_sound_3_5Hz_2
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_16
      Code Type = Py
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      Begin Routine:
        # Reset trial-specific variables
        repeat_count = 0           # Count how many beeps have been played
        next_beep_time = 0         # Schedule when the next beep should play
        sound_times = []           # List to store timestamps for each beep

        # Reset the sound component’s timing if needed.
        # For sound components created in Builder, you can clear the tStartRefresh property:
        beep_sound_3_5Hz_2.tStartRefresh = None

        # If your design allows, you might want to reinitialize some internal state here.
      Each Frame:
        # Get the current time in the routine (for example, using the routine timer)
        t = routineTimer.getTime()  # Ensure routineTimer is defined in your experiment

        # Play the beep repeatedly until 105 repeats are reached
        if repeat_count < 105:
            if t >= next_beep_time:
                # Play the sound
                beep_sound_3_5Hz_2.play()

                # Optionally print debugging information:
                print("Beep played at t =", t, "; tStartRefresh =", beep_sound_3_5Hz_2.tStartRefresh)

                # Record the time when the sound is played
                sound_times.append(t)
                repeat_count += 1

                # Schedule next beep (adjust interval as needed)
                next_beep_time += 0.286
        else:
            continueRoutine = False  # End the routine once the beep has been played 105 times

        # Example: if you have any code that depends on tStartRefresh, check it first:
        if beep_sound_3_5Hz_2.tStartRefresh is not None:
            if t > beep_sound_3_5Hz_2.tStartRefresh + 0.2 - frameTolerance:
                # Additional frame code if needed
                pass
      End Routine:
        # Log the beep play times to your data file
        thisExp.addData("sound3_5Hz_2_play_times", sound_times)
  Routine Cross
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    TextComponent cross_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7.5
      text = +
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 7.5
      stopVal [duration (s)] = 0.5
      text = 5
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [duration (s)] = 0.5
      text = 4
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 8.5
      stopVal [duration (s)] = 0.5
      text = 3
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 9
      stopVal [duration (s)] = 0.5
      text = 2
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 9.5
      stopVal [duration (s)] = 0.5
      text = 1
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  Routine Auditory_cue_0_5Hz
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    KeyboardComponent resp_0_5Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_0_5HZ
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 15:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_0_5HZ.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 2  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 15 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound0_5HZ_play_times", sound_times)
  Routine Auditory_cue_0_8HZ
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    KeyboardComponent resp_0_8HZs
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_0_8HZ
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 20:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_0_8HZ.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1.5  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 20 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound0_8HZ_play_times", sound_times)
  Routine Auditory_cue_1Hz
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    KeyboardComponent resp_1Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_1Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 30:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_1Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1  # Schedule the next beep after 2 seconds
        else:
            # End the routine after 30 repetitions
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound1Hz_play_times", sound_times)
  Routine Auditory_cue_2Hz
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    KeyboardComponent resp_2Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_2Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 60:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_2Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.5  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound2Hz_play_times", sound_times)
  Routine Auditory_cue_3Hz
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    KeyboardComponent resp_3Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_3Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 90:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_3Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.333  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound3Hz_play_times", sound_times)
  Routine Auditory_cue_5Hz
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    KeyboardComponent resp_5Hz
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_5Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 150:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_5Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.2  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound5Hz_play_times", sound_times)
  Routine Auditory_cue_6Hz
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  Routine Auditory_cue_7Hz
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  Routine Auditory_cue_8Hz
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  Routine MRI_Settings
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    CodeComponent settings
      Code Type = Py
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      Begin Experiment:
        # KUL/UZL Clinical fMRI paradigms
        # @ Stefan Sunaert - stefan.sunaert@kuleuven.be
        # @ Maud Beeckmans - maud.beeckmans@kuleuven.be
        # v1.2 - March 2024


        # Here we define the keys that the keyboard or response box will generate
        button1 = ('num_6','6')
        button2 = ('num_7','7')
        button3 = ('num_8','8')
        button4 = ('num_9','9')
        button5 = ('num_0','0')

        # What is/are the key(s) generated by the trigger box of the scanner?
        mripulse = ('num_5','5','(')
        pulses_before_start = 2

        # Should the image be flipped on the screen?
        # Possible: None, horiz (flips L-R), vert (flips U-D)
        #flip = 'horiz'
        flip = 'none'
        #flip = 'vert'
    CodeComponent code_init
      Code Type = Py
      Begin Experiment:
        # Show some extra information if 1
        debug = 1

        # make a function for the allowed buttons
        def allowedButtons(tup):
            str = ''
            for item in tup:
                str = '\'' + item + '\'' + ',' + str
            str = str[:-1]
            return str

        # make a function for the tup 2 str
        def tup2str(tup):
            s = ',' # s is assigned the comma, this will be used as the separator
            str = '' # str is initialized as an empty string
            str = s.join(tup) # = string method that conactenates the elements of 'tup' using 's' (which is a comma) as the separator
            return str

        # some defaults
        time_pos = (0.8, -0.46)
        time_opa = 0.3
        time_size = 0.015
  Routine Auditory_cue_1_Hz
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    KeyboardComponent resp_1Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    SoundComponent beep_sound_1_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 30:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_1_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 1  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound1Hz_play_times", sound_times)
    KeyboardComponent resp_1Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_1Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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  Routine Auditory_cue_2_Hz
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    KeyboardComponent resp_2Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_2Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 60:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_2_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.5  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound2Hz_play_times", sound_times)
    SoundComponent beep_sound_2_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine Auditory_cue_3_Hz
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    KeyboardComponent resp_3Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    SoundComponent beep_sound_3_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 90:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_3_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.3333  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound3Hz_play_times", sound_times)
  Routine Auditory_cue_4_Hz
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    KeyboardComponent resp_4Hz_1
      allowedKeys = 'num_6','6'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_4
      allowedKeys = 'num_9','9'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_4Hz_5
      allowedKeys = 'num_0','0'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    SoundComponent beep_sound_4_Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        repeat_count = 0  # To count the sound repetitions
        next_beep_time = 0  # To schedule when the next sound should play
        sound_times = []  # List to store timestamps of each sound start time
      Each Frame:
        # Play the sound
        if repeat_count < 120:
            # Check if the current time (t) is equal to or has passed the next beep time
            if t >= next_beep_time:
                beep_sound_4_Hz.play()  # Play the sound with the new name
                sound_times.append(t)  # Record the timestamp when the sound plays
                repeat_count += 1  # Increase the repetition count
                next_beep_time += 0.25  # Schedule the next beep after 2 seconds
        else:
            continueRoutine = False
      End Routine:
        # Log each time the sound was played
        thisExp.addData("sound4Hz_play_times", sound_times)
  Routine tapping
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    KeyboardComponent resp_2
      allowedKeys = 'num_7','7'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    KeyboardComponent resp_3
      allowedKeys = 'num_8','8'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = TAP
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    SoundComponent beep_sound_3_5Hz
      sound = A
      speakerIndex = 8.0
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_15
      Code Type = Py
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      Begin Routine:
        # Reset trial-specific variables
        repeat_count = 0           # Count how many beeps have been played
        next_beep_time = 0         # Schedule when the next beep should play
        sound_times = []           # List to store timestamps for each beep

        # Reset the sound component’s timing if needed.
        # For sound components created in Builder, you can clear the tStartRefresh property:
        beep_sound_3_5Hz.tStartRefresh = None

        # If your design allows, you might want to reinitialize some internal state here.
      Each Frame:
        # Get the current time in the routine (for example, using the routine timer)
        t = routineTimer.getTime()  # Ensure routineTimer is defined in your experiment

        # Play the beep repeatedly until 105 repeats are reached
        if repeat_count < 105:
            if t >= next_beep_time:
                # Play the sound
                beep_sound_3_5Hz.play()

                # Optionally print debugging information:
                print("Beep played at t =", t, "; tStartRefresh =", beep_sound_3_5Hz.tStartRefresh)

                # Record the time when the sound is played
                sound_times.append(t)
                repeat_count += 1

                # Schedule next beep (adjust interval as needed)
                next_beep_time += 0.286
        else:
            continueRoutine = False  # End the routine once the beep has been played 105 times

        # Example: if you have any code that depends on tStartRefresh, check it first:
        if beep_sound_3_5Hz.tStartRefresh is not None:
            if t > beep_sound_3_5Hz.tStartRefresh + 0.2 - frameTolerance:
                # Additional frame code if needed
                pass
      End Routine:
        # Log the beep play times to your data file
        thisExp.addData("sound3_5Hz_play_times", sound_times)
  Routine Setting
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    KeyboardComponent key_resp
      allowedKeys = '5', 'T', 't', 'num_5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The first tapping block will start soon. Stay prepared!

        When you see the word "TAP" you may start tapping.
Flow
  Routine Welcome
  Routine Setting
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine tapping
    Routine Rest_30
  LoopTerminator trials
  Routine End_screen
